# Simplest TOPAS example.
# A box in a beam with EM physics.

s:Ge/World/Material  = "Vacuum"
d:Ge/World/HLX       = 2.0 m
d:Ge/World/HLY       = 2.0 m
d:Ge/World/HLZ       = 2.0 m
b:Ge/World/Invisible = "True"

s:Ge/WaterBox/Type     = "TsBox"
s:Ge/WaterBox/Parent   = "World"
s:Ge/WaterBox/Material = "G4_WATER"
d:Ge/WaterBox/HLX      = 5.0 cm
d:Ge/WaterBox/HLY      = 5.0 cm
d:Ge/WaterBox/HLZ      = 10.0 cm
d:Ge/WaterBox/TransX   = 0. cm
d:Ge/WaterBox/TransY   = 0. cm
d:Ge/WaterBox/TransZ   = 0. cm
d:Ge/WaterBox/RotX     = 0. deg
d:Ge/WaterBox/RotY     = 0. deg
d:Ge/WaterBox/RotZ     = 0. deg
s:Ge/WaterBox/Color    = "blue"

s:Sc/1WaterBoxDoseToMedium/Quantity                         = "DoseToMedium"
s:Sc/1WaterBoxDoseToMedium/Component                        = "WaterBox"
b:Sc/1WaterBoxDoseToMedium/OutputToConsole                  = "FALSE"
s:Sc/1WaterBoxDoseToMedium/IfOutputFileAlreadyExists        = "Overwrite"
sv:Sc/1WaterBoxDoseToMedium/Report = 4 "Sum" "Mean" "Variance" "Standard_Deviation"
i:Sc/1WaterBoxDoseToMedium/XBins = 5
i:Sc/1WaterBoxDoseToMedium/YBins = 5
i:Sc/1WaterBoxDoseToMedium/ZBins = 40

s:Sc/2ProtonLET/Quantity                         = "ProtonLET"
s:Sc/2ProtonLET/Component                        = "WaterBox"
b:Sc/2ProtonLET/OutputToConsole                  = "FALSE"
s:Sc/2ProtonLET/IfOutputFileAlreadyExists        = "Overwrite"
sv:Sc/2ProtonLET/Report = 4 "Sum" "Mean" "Variance" "Standard_Deviation"
i:Sc/2ProtonLET/XBins = 5
i:Sc/2ProtonLET/YBins = 5
i:Sc/2ProtonLET/ZBins = 40


s:So/ProtonBeam/Type                     = "Beam"
s:So/ProtonBeam/Component                = "BeamPosition"
s:So/ProtonBeam/BeamParticle             = "proton"
d:So/ProtonBeam/BeamEnergy               = 150. MeV
u:So/ProtonBeam/BeamEnergySpread         = 0.757504
s:So/ProtonBeam/BeamPositionDistribution = "Gaussian"
s:So/ProtonBeam/BeamPositionCutoffShape  = "Ellipse"
d:So/ProtonBeam/BeamPositionCutoffX      = 0.05 cm
d:So/ProtonBeam/BeamPositionCutoffY      = 0.05 cm
d:So/ProtonBeam/BeamPositionSpreadX      = 0.05 cm
d:So/ProtonBeam/BeamPositionSpreadY      = 0.05 cm
s:So/ProtonBeam/BeamAngularDistribution  = "Gaussian"
d:So/ProtonBeam/BeamAngularCutoffX       = 90. deg
d:So/ProtonBeam/BeamAngularCutoffY       = 90. deg
d:So/ProtonBeam/BeamAngularSpreadX       = 0.01 deg
d:So/ProtonBeam/BeamAngularSpreadY       = 0.01 deg
i:So/ProtonBeam/NumberOfHistoriesInRun   = 100000

# s:Gr/ViewA/Type = "OpenGL"
# d:Gr/ViewA/Theta = 45. deg # view angle as in /vis/viewer/set/viewpointThetaPhi
# d:Gr/ViewA/Phi = 45. deg # view angle as in /vis/viewer/set/viewpointThetaPhi

i:Ts/ShowHistoryCountAtInterval = 1000
b:Ts/PauseBeforeQuit = "True"